PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  BRAIN
    BRN W WO_n
      B2 - BRN W WO_NON-TUMOR/LESION
        AAHScout
        AX DWI
        SAG T1 MPRAGE
        AX FLAIR
        AX GRE
        AX T2
        SAG SPC C+ FS
        AX T1 FS POST

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\AAHScout
TA: 0:14 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  TE: 1.37 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3.15 ms
  TE: 1.37 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 6.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.15 ms
  TE: 1.37 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\AX DWI
TA: 1:52 PM: ISO Voxel size: 0.7×0.7×4.0 mmPAT: 3 Rel. SNR: 1.00  : epse
Properties
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  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 14 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4800 ms
  TE: 75.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 4800 ms
  TE: 75.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 160
  Phase resolution: 100 %
  Phase partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 114
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4800 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: ISO
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4800 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.94 ms
  Bandwidth: 1202 Hz/Px
Sequence - Part 2
  EPI factor: 160
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\SAG T1 MPRAGE
TA: 5:21 PM: ISO Voxel size: 0.9×0.9×0.9 mmPAT: 2 Rel. SNR: 1.00  : tfl
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 16.7 %
  Slices per slab: 192
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 0.90 mm
  TR: 2300.0 ms
  TE: 2.32 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 2300.0 ms
  TE: 2.32 ms
  Magn. preparation: Non-sel. IR
  TI: 900 ms
  Flip angle: 8 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 0.90 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 50 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 16.7 %
  Slices per slab: 192
  FoV read: 240 mm
  FoV phase: 100.0 %
  Slice thickness: 0.90 mm
  TR: 2300.0 ms
  Multi-slice mode: Single shot
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
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  Initial Orientation: Sagittal
Geometry - Navigator
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System - Miscellaneous
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  Sagittal: R >> L
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  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2300.0 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI: 900 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 240 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Inline - MapIt
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  TR: 2300.0 ms
  TE: 2.32 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Reordering: Linear
  Asymmetric echo: Allowed
  Flow comp.: No
  Multi-slice mode: Single shot
  Echo spacing: 7 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
  Incr. Gradient spoiling: Off
  Turbo factor: 224
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\AX FLAIR
TA: 3:00 PM: ISO Voxel size: 0.4×0.4×3.4 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.4 mm
  TR: 9000.0 ms
  TE: 94.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 9000.0 ms
  TE: 94.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.4 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.4 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 3.4 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: Isocenter
  Orientation: Coronal
  Rotation: 0.00 deg
  R >> L: 193 mm
  F >> H: 220 mm
  A >> P: 154 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 87.5 %
  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.52 ms
  Bandwidth: 287 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 17
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\AX GRE
TA: 1:41 PM: FIX Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 750.0 ms
  TE: 19.90 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 750.0 ms
  TE: 19.90 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 750.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 30
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
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  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 750.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 750.0 ms
  TE: 19.90 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Slice/Read
  Multi-slice mode: Interleaved
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\AX T2
TA: 2:09 PM: ISO Voxel size: 0.3×0.3×3.4 mmPAT: 2 Rel. SNR: 1.00  : tse_rr
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  AutoAlign: ---
  Phase oversampling: 65 %
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 3.4 mm
  TR: 3800.0 ms
  TE: 91.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 3800.0 ms
  TE: 91.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 180 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 3.4 mm
  Base resolution: 320
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 34
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 3.4 mm
  TR: 3800.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: F >> H
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  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 3.4 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 90.6 %
System - Miscellaneous
  Positioning mode: ISO
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  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3800.0 ms
  Concatenations: 2
Physio - Cardiac
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  FoV phase: 90.6 %
  Phase resolution: 100 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.13 ms
  Bandwidth: 200 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 16
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 16
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\SAG SPC C+ FS
TA: 5:42 PM: REF Voxel size: 0.7×0.7×0.9 mmPAT: 4 Rel. SNR: 1.00  : spcR
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: L0.1 A8.4 H15.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 34 %
  Slice oversampling: 12.5 %
  Slices per slab: 256
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 0.90 mm
  TR: 600 ms
  TE: 21.0 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Prescan Normalize, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 600 ms
  TE: 21.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Blood suppr.: Off
  Restore magn.: On
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 0.90 mm
  Base resolution: 300
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: CAIPIRINHA
  Accel. factor PE: 2
  Ref. lines PE: 84
  Accel. factor 3D: 2
  Ref. lines 3D: 84
  Reordering Shift 3D: 1
  Reference scan mode: GRE/separate
  CAIPIRINHA mode: Free
Resolution - Filter Image
  Image Filter: On
  Intensity: Medium
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.1 A8.4 H15.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 12.5 %
  Slices per slab: 256
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 0.90 mm
  TR: 600 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.1 A8.4 H15.7 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: L0.1 A8.4 H15.7
  L: 0.1 mm
  A: 8.4 mm
  H: 15.7 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Sagittal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Restore magn.: On
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L0.1 A8.4 H15.7 mm
  Orientation: Sagittal
  Rotation: 0.00 deg
  A >> P: 220 mm
  F >> H: 220 mm
  R >> L: 231 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 600 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 100 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Radial
  Flow comp.: No
  Echo spacing: 4.24 ms
  Adiabatic-mode: Off
  Bandwidth: 595 Hz/Px
Sequence - Part 2
  Echo train duration: 204 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T1 var
  Turbo factor: 43
Sequence - Special
  RO grad. spoiling factor: 1.20 X
  T1/PD VFA TYPE: 1
  Read external VFA file: Off
  Symmetric radial reorder: On
  DANTE prep: Off
Sequence - Assistant
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN W WO_n\B2 - BRN W WO_NON-TUMOR/LESION\AX T1 FS POST
TA: 1:12 PM: FIX Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
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Routine
  Slice group: 1
  Slices: 31
  Dist. factor: 30 %
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 373.0 ms
  TE: 2.49 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 373.0 ms
  TE: 2.49 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 31
  Dist. factor: 30 %
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 373.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  F: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 2 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 31
  Slice thickness: 4.0 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 2 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
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System - Adjust Volume
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 160 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 373.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
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  Phase resolution: 70 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 373.0 ms
  TE: 2.49 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 360 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s
