PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  BRAIN
    ACUTE STROKE
      NON HYPER ACUTE STROKE
        AAHScout
        LOC HD-NK
        AX DWI
        AX DWI ISOTROPIC MB
        AX FLAIR
        AX GRE
        AX SWI
        TWIST_TIMING
        3D TOF
        CE MRA
        CE MRA HEAD
        AX T1 FS POST
        AX FLAIR
        AX PERFUSION
        AX GRE

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AAHScout
TA: 0:14 PM: ISO Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  TE: 1.37 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3.15 ms
  TE: 1.37 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 6.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.15 ms
  TE: 1.37 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\LOC HD-NK
TA: 0:13 PM: ISO Voxel size: 0.7×0.7×7.0 mmPAT: Off Rel. SNR: 1.00  : fl
Properties
  Prio recon: On
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Routine
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 8.6 ms
  TE: 4.00 ms
  Averages: 2
  Concatenations: 3
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 8.6 ms
  TE: 4.00 ms
  TD: 0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 2
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: None
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 1
  Dist. factor: 20 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice group: 2
  Slices: 1
  Dist. factor: 20 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Slice group: 3
  Slices: 1
  Dist. factor: 20 %
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 350 mm
  FoV phase: 100.0 %
  Slice thickness: 7.0 mm
  TR: 8.6 ms
  Multi-slice mode: Sequential
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  Slice group: 2
  Slice group: 3
  AutoAlign: ---
  Position: L0.0 P30.0 H0.0 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 1
  Slice thickness: 7.0 mm
  Dist. factor: 20 %
  FoV read: 350 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 8.6 ms
  Concatenations: 3
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 350 mm
  FoV phase: 100.0 %
  Phase resolution: 90 %
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 8.6 ms
  TE: 4.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Sequential
  Bandwidth: 320 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Normal
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX DWI
TA: 1:40 PM: REF Voxel size: 0.8×0.8×4.0 mmPAT: 3 Rel. SNR: 1.00  : epse
Properties
  Prio recon: Off
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  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 25 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000 ms
  TE: 78.0 ms
  Concatenations: 1
  Filter: Raw filter, Dynamic Field Corr., Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 4000 ms
  TE: 78.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 136
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 126
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: On
  Unfiltered images: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 25 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 4000 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: R0.2 A0.2 F2.8
  R: 0.2 mm
  A: 0.2 mm
  F: 2.8 mm
  Initial Rotation: 0.01 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Rotation: 0.01 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 164 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 2.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 4000 ms
  Concatenations: 1
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Diff - Neuro
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 30
Diff - Body
  Diffusion mode: 4-Scan Trace
  Diff. directions: 4
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 4
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 30
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.78 ms
  Bandwidth: 1470 Hz/Px
Sequence - Part 2
  EPI factor: 136
  RF pulse type: Low SAR
  Gradient mode: Fast

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX DWI ISOTROPIC MB
TA: 3:14 PM: REF Voxel size: 1.0×1.0×2.2 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 75
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 267 mm
  FoV phase: 100.0 %
  Slice thickness: 2.2 mm
  TR: 3600 ms
  TE: 77.0 ms
  Concatenations: 1
  Filter: Raw filter, Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3600 ms
  TE: 77.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 267 mm
  FoV phase: 100.0 %
  Slice thickness: 2.2 mm
  Base resolution: 128
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 50
  Reference scan mode: GRE/separate
Resolution - Filter Image
  Distortion Corr.: Off
  Prescan Normalize: On
  Dynamic Field Corr.: Off
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Geometry - Common
  Slice group: 1
  Slices: 75
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 267 mm
  FoV phase: 100.0 %
  Slice thickness: 2.2 mm
  TR: 3600 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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System - Miscellaneous
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  Sagittal: R >> L
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  AutoAlign: ---
  Coil Select Mode: Default
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 267 mm
  R >> L: 267 mm
  F >> H: 165 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Diff - Neuro
  Diffusion mode: MDDW
  Diff. directions: 6
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  b-value 2: 950 s/mm²
  b-value 1: 2
  b-value 2: 7
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Diff - Body
  Diffusion mode: MDDW
  Diff. directions: 6
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  b-value 2: 950 s/mm²
  b-value 1: 2
  b-value 2: 7
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Diff - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: Off
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.63 ms
  Bandwidth: 1860 Hz/Px
Sequence - Part 2
  EPI factor: 128
  RF pulse type: Normal
  Gradient mode: Fast
Sequence - Special
  Slice Acc Factor: 3
  RF Clip: 0
  Flip Angle: 20
  Dummies: 5
  Verse Factor: 2.0
  PE Shift Factor: 2
  ACS Scheme: Standard

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX FLAIR
TA: 3:00 PM: FIX Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 40 %
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  TE: 94.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 9000.0 ms
  TE: 94.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: R0.2 A0.2 F2.8
  R: 0.2 mm
  A: 0.2 mm
  F: 2.8 mm
  Initial Rotation: 90.01 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Rotation: 90.01 deg
  R >> L: 193 mm
  A >> P: 220 mm
  F >> H: 159 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 87.5 %
  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.52 ms
  Bandwidth: 287 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 17
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX GRE
TA: 1:56 PM: ISO Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: On
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 25 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 870.0 ms
  TE: 19.90 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 870.0 ms
  TE: 19.90 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: Off
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Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 25 %
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  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 870.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 3 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 3 mm
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  Coil Combine Mode: Sum of Squares
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 870.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
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  TR: 870.0 ms
  TE: 19.90 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Slice/Read
  Multi-slice mode: Interleaved
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX SWI
TA: 4:09 PM: ISO Voxel size: 0.4×0.4×1.8 mmPAT: 3 Rel. SNR: 1.00  : swi_r
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  Slice oversampling: 9.1 %
  Slices per slab: 88
  FoV read: 220 mm
  FoV phase: 91.0 %
  Slice thickness: 1.80 mm
  TR: 26.0 ms
  TE: 19.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 26.0 ms
  TE: 19.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 91.0 %
  Slice thickness: 1.80 mm
  Base resolution: 288
  Phase resolution: 95 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
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  Slice oversampling: 9.1 %
  Slices per slab: 88
  FoV read: 220 mm
  FoV phase: 91.0 %
  Slice thickness: 1.80 mm
  TR: 26.0 ms
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Geometry - AutoAlign
  Slab group: 1
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Geometry - Tim CT
  Tim CT mode: Off
  Slabs: 1
  Slices per slab: 88
  Slice thickness: 1.80 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 91.0 %
  Segments: 1
System - Miscellaneous
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  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Rotation: 90.01 deg
  R >> L: 201 mm
  A >> P: 220 mm
  F >> H: 159 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 26.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
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  FoV phase: 91.0 %
  Phase resolution: 95 %
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 26.0 ms
  TE: 19.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 120 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slab-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\TWIST_TIMING
TA: 0:49 PM: ISO Voxel size: 1.3×1.3×1.3 mmPAT: 6 Rel. SNR: 1.00  : fldyn
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
  Auto open inline display: On
  Auto close inline display: On
  Start measurement without further preparation: Off
  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Position: L0.0 P2.8 F0.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 12.5 %
  Slices per slab: 128
  FoV read: 425 mm
  FoV phase: 68.8 %
  Slice thickness: 1.33 mm
  TR: 2.16 ms
  TE: 0.87 ms
  Filter: Distortion Corr.(2D), Elliptical filter
  Coil elements: HE1-4;NE1,2;SP1,2
Contrast - Common
  TR: 2.16 ms
  TE: 0.87 ms
  Flip angle: 18 deg
  Fat suppr.: None
Contrast - Dynamic
  Reconstruction: Magnitude
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Multiple series: Each measurement
Resolution - Common
  FoV read: 425 mm
  FoV phase: 68.8 %
  Slice thickness: 1.33 mm
  Base resolution: 320
  Phase resolution: 75 %
  Slice resolution: 75 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  View sharing: TWIST
  Central region A: 8 %
  Sampling density B: 20 %
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 3
  Ref. lines 3D: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.0 P2.8 F0.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Slice oversampling: 12.5 %
  Slices per slab: 128
  FoV read: 425 mm
  FoV phase: 68.8 %
  Slice thickness: 1.33 mm
  TR: 2.16 ms
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 P2.8 F0.4 mm
  Orientation: Coronal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Performance
  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
  B0 Shim mode: Tune up
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  Adjustment Tolerance: Maximum
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Angio - Common
  View sharing: TWIST
  Central region A: 8 %
  Sampling density B: 20 %
  Dynamic recon mode: Symmetric Share
  Flip angle: 18 deg
  Temporal resolution: 1.33 s
  Measurements: 30
  Pause after meas. 1: 0.0 s
  Pause after meas. 2: 0.0 s
  Pause after meas. 3: 0.0 s
  Pause after meas. 4: 0.0 s
  Pause after meas. 5: 0.0 s
  Pause after meas. 6: 0.0 s
  Pause after meas. 7: 0.0 s
  Pause after meas. 8: 0.0 s
  Pause after meas. 9: 0.0 s
  Pause after meas. 10: 0.0 s
  Pause after meas. 11: 0.0 s
  Pause after meas. 12: 0.0 s
  Pause after meas. 13: 0.0 s
  Pause after meas. 14: 0.0 s
  Pause after meas. 15: 0.0 s
  Pause after meas. 16: 0.0 s
  Pause after meas. 17: 0.0 s
  Pause after meas. 18: 0.0 s
  Pause after meas. 19: 0.0 s
  Pause after meas. 20: 0.0 s
  Pause after meas. 21: 0.0 s
  Pause after meas. 22: 0.0 s
  Pause after meas. 23: 0.0 s
  Pause after meas. 24: 0.0 s
  Pause after meas. 25: 0.0 s
  Pause after meas. 26: 0.0 s
  Pause after meas. 27: 0.0 s
  Pause after meas. 28: 0.0 s
  Pause after meas. 29: 0.0 s
  Burn time-to-center: On
  Temporal interpolation: 1
  Time to center: 5.9 s
Angio - Inline
  Subtract: On
  Save images: Off
  Autoscaling: Off
  Scaling factor: 1
  Offset: 0
  Subtrahend: 1
  Subtraction indices:
  Subtraction group: 1
  Measurements: 30
  StdDev: Off
  Save original images: Off
Angio - MIP
  MIP-Sag: On
  MIP-Cor: On
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: Off
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Strong
  Optimization: Min. TE TR
  Bandwidth: 710 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: Off
Sequence - Assistant
  Mode: Off
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\3D TOF
TA: 3:56 PM: ISO Voxel size: 0.3×0.3×0.5 mmPAT: 3 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 5
  Dist. factor: -20.00 %
  Position: L0.0 A4.0 F6.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 200 mm
  FoV phase: 90.6 %
  Slice thickness: 0.50 mm
  TR: 21.0 ms
  TE: 3.43 ms
  Averages: 1
  Concatenations: 5
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 21.0 ms
  TE: 3.43 ms
  TD: 0.000 ms
  MTC: Off
  Flip angle: 18 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 200 mm
  FoV phase: 90.6 %
  Slice thickness: 0.50 mm
  Base resolution: 384
  Phase resolution: 95 %
  Slice resolution: 50 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 32
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 5
  Dist. factor: -20.00 %
  Position: L0.0 A4.0 F6.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 200 mm
  FoV phase: 90.6 %
  Slice thickness: 0.50 mm
  TR: 21.0 ms
  Multi-slice mode: Sequential
  Series: Descending
  Concatenations: 5
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L0.0 A4.0 F6.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: L0.0 A4.0 F6.8
  L: 0.0 mm
  A: 4.0 mm
  F: 6.8 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Tracking H
  Gap: 10 mm
  Thickness: 40 mm
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 7 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 7 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
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  Adjustment Tolerance: Auto
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System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 21.0 ms
  Concatenations: 5
Physio - Cardiac
  Fat suppr.: None
  Dark blood: Off
  FoV read: 200 mm
  FoV phase: 90.6 %
  Phase resolution: 95 %
Angio - Common
  TONE ramp: 70 %
  Flow direction: F >> H
  Flip angle: 18 deg
  MTC: Off
  Measurements: 1
  3D centric reordering: On
Angio - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
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Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Sequential
  Bandwidth: 186 Hz/Px
Sequence - Part 2
  Gradient mode: Fast
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\CE MRA
TA: 0:24 PM: ISO Voxel size: 0.8×0.8×0.8 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
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  Load images to graphic segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: C > T-10.2 > S0.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  Slice oversampling: 12.5 %
  Slices per slab: 128
  FoV read: 340 mm
  FoV phase: 81.3 %
  Slice thickness: 0.75 mm
  TR: 3.36 ms
  TE: 1.24 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 3.36 ms
  TE: 1.24 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 340 mm
  FoV phase: 81.3 %
  Slice thickness: 0.75 mm
  Base resolution: 448
  Phase resolution: 82 %
  Slice resolution: 61 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: C > T-10.2 > S0.3
  Phase enc. dir.: R >> L
  Slice oversampling: 12.5 %
  Slices per slab: 128
  FoV read: 340 mm
  FoV phase: 81.3 %
  Slice thickness: 0.75 mm
  TR: 3.36 ms
  Multi-slice mode: Sequential
  Series: Ascending
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: ---
  Position: L1.4 P11.8 H0.2 mm
  Orientation: C > T-10.2 > S0.3
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
System - Adjustments
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  Adjustment Tolerance: Maximum
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System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.36 ms
  Segments: 1
Angio - Common
  Flip angle: 25 deg
  Measurements: 1
  3D centric reordering: On
  Time to center: 6.0 s
Angio - Inline
  Subtract: On
  Save images: On
  Autoscaling: Off
  Scaling factor: 3
  Offset: 0
  Subtrahend: 1
  Subtraction group: 1
  Measurements: 1
  StdDev: Off
  Motion Correction: Angio Advanced
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: Min. TE TR
  Multi-slice mode: Sequential
  Bandwidth: 590 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Slab-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 0 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\CE MRA HEAD
TA: 0:43 PM: ISO Voxel size: 0.7×0.7×1.0 mmPAT: 4 Rel. SNR: 1.00  : fl
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L1.4 P11.8 H0.2 mm
  Orientation: C > T-10.2 > S0.3
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 40 %
  Slice oversampling: 42.9 %
  Slices per slab: 224
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 1.00 mm
  TR: 3.21 ms
  TE: 1.23 ms
  Averages: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4;NE1,2;SP1
Contrast - Common
  TR: 3.21 ms
  TE: 1.23 ms
  Magn. preparation: None
  Flip angle: 25 deg
  Fat suppr.: None
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Resolution - Common
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 1.00 mm
  Base resolution: 320
  Phase resolution: 82 %
  Slice resolution: 62 %
  Phase partial Fourier: 7/8
  Slice partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 2
  Ref. lines 3D: 40
  Reference scan mode: Integrated
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Geometry - Common
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  Slice oversampling: 42.9 %
  Slices per slab: 224
  FoV read: 210 mm
  FoV phase: 81.3 %
  Slice thickness: 1.00 mm
  TR: 3.21 ms
  Multi-slice mode: Sequential
  Series: Ascending
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Physio - Signal1
  1st Signal/Mode: None
  TR: 3.21 ms
  Segments: 1
Angio - Common
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  Time to center: 1.0 s
Angio - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Motion Correction: None
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Optimization: None
  Multi-slice mode: Sequential
  Bandwidth: 450 Hz/Px
Sequence - Part 2
  Segments: 1
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Non-sel.
  RF spoiling: On
  Phase Enc. Rewinder: On
Sequence - Assistant
  Mode: Min flip angle
  Min flip angle: 18 deg
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX T1 FS POST
TA: 1:12 PM: ISO Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Load images to stamp segments: Off
  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 31
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 50 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 373.0 ms
  TE: 2.49 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 373.0 ms
  TE: 2.49 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 70 deg
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 31
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 373.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
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  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Quick
  Fat suppr.: Q-fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 31
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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  Coil Combine Mode: Adaptive Combine
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System - Adjustments
  B0 Shim mode: Standard
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  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 220 mm
  A >> P: 220 mm
  F >> H: 154 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 373.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: Q-fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 70 deg
  Measurements: 1
  Contrasts: 1
  TR: 373.0 ms
  TE: 2.49 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 360 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX FLAIR
TA: 3:00 PM: FIX Voxel size: 0.4×0.4×3.5 mmPAT: 2 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 40 %
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  TE: 94.0 ms
  Averages: 1
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 9000.0 ms
  TE: 94.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Flip angle: 150 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
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Resolution - Common
  FoV read: 220 mm
  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 90 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
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Geometry - Common
  Slice group: 1
  Slices: 35
  Dist. factor: 30 %
  Position: R0.2 A0.2 F2.8 mm
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  FoV phase: 87.5 %
  Slice thickness: 3.5 mm
  TR: 9000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: R0.2 A0.2 F2.8
  R: 0.2 mm
  A: 0.2 mm
  F: 2.8 mm
  Initial Rotation: 90.01 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 35
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 87.5 %
System - Miscellaneous
  Positioning mode: FIX
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  AutoAlign: Head > Brain
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: R0.2 A0.2 F2.8 mm
  Orientation: Transversal
  Rotation: 90.01 deg
  R >> L: 193 mm
  A >> P: 220 mm
  F >> H: 159 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2500 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 87.5 %
  Phase resolution: 90 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.52 ms
  Bandwidth: 287 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 17
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX PERFUSION
TA: 1:35 PM: ISO Voxel size: 1.7×1.7×5.0 mmPAT: 2 Rel. SNR: 1.00  : epfid
Properties
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  Load images to stamp segments: On
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  Wait for user to start: On
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 24
  Dist. factor: 30 %
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 1460 ms
  TE: 25.0 ms
  Averages: 1
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D)
  Coil elements: HE1-4
Contrast - Common
  TR: 1460 ms
  TE: 25.0 ms
  MTC: Off
  Flip angle: 90 deg
  Fat suppr.: Water excit. normal
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 60
  Delay in TR: 0 ms
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  Base resolution: 128
  Phase resolution: 90 %
  Phase partial Fourier: 7/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
  Hamming: Off
Geometry - Common
  Slice group: 1
  Slices: 24
  Dist. factor: 30 %
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 5.0 mm
  TR: 1460 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L0.2 A6.6 F2.5
  L: 0.2 mm
  A: 6.6 mm
  F: 2.5 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: Water excit. normal
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 2 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 2 mm
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  Coil Combine Mode: Sum of Squares
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: On - AutoCoilSelect
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System - Adjust Volume
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 155 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 1460 ms
  Concatenations: 1
Perf
  GBP: On
  PBP: Off
  TTP: On
  relCBV: Off
  relCBF: Off
  relMTT: Off
  relCBVCorr: Off
  Measurements: 60
  Motion correction: Off
  Spatial filter: Off
Sequence - Part 1
  Introduction: On
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 0.75 ms
  Bandwidth: 1502 Hz/Px
Sequence - Part 2
  EPI factor: 115
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\ACUTE STROKE\NON HYPER ACUTE STROKE\AX GRE
TA: 1:56 PM: ISO Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 31
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 870.0 ms
  TE: 19.90 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 870.0 ms
  TE: 19.90 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 20 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 75 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 31
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 870.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 31
  Slice thickness: 4.0 mm
  Dist. factor: 25 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 0 mm
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  Save uncombined: Off
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 870.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 75 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 20 deg
  Measurements: 1
  Contrasts: 1
  TR: 870.0 ms
  TE: 19.90 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Slice/Read
  Multi-slice mode: Interleaved
  Bandwidth: 220 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
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