PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  BRAIN
    BRN SEIZURE
      B6 - SEIZURE WO
        AAHScout
        AX DWI
        COR T2
        cor FLAIR
        T1 TRUE IR SPC COR
        AX SWI
        AX T1
        SAG T1
        COR SPACE FLAIR

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\AAHScout
TA: 0:14 PM: ISO Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: On
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  TE: 1.37 ms
  Averages: 1
  Concatenations: 1
  Filter: Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3.15 ms
  TE: 1.37 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 6.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.15 ms
  TE: 1.37 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\AX DWI
TA: 1:17 PM: ISO Voxel size: 1.4×1.4×4.0 mmPAT: 2 Rel. SNR: 1.00  : epse
Properties
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  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 5400 ms
  TE: 73.0 ms
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 5400 ms
  TE: 73.0 ms
  MTC: Off
  Magn. preparation: None
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
Contrast - Dynamic
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Delay in TR: 0 ms
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 160
  Phase resolution: 100 %
  Phase partial Fourier: 6/8
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Reference scan mode: EPI/separate
Resolution - Filter Image
  Distortion Corr.: On
  Mode: 2D
  Prescan Normalize: On
  Dynamic Field Corr.: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 30
  Dist. factor: 25 %
  Position: Isocenter
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 5400 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: Isocenter
  Orientation: Transversal
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Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Special sat.: None
Geometry - Navigator
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System - Miscellaneous
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
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  A >> P: 220 mm
  R >> L: 220 mm
  F >> H: 149 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 5400 ms
  Concatenations: 1
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Diff - Neuro
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  FA maps: Off
  Mosaic: Off
  Tensor: Off
  Noise level: 40
Diff - Body
  Diffusion mode: 3-Scan Trace
  Diff. directions: 3
  Diffusion Scheme: Monopolar
  Diff. weightings: 2
  b-value 1: 0 s/mm²
  b-value 2: 1000 s/mm²
  b-value 1: 2
  b-value 2: 3
  Diff. weighted images: Off
  Trace weighted images: On
  ADC maps: On
  Exponential ADC Maps: Off
  FA maps: Off
  Invert Gray Scale: Off
  Calculated Image: Off
  b-Value >=: 0 s/mm²
  Noise level: 40
Diff - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
Sequence - Part 1
  Introduction: On
  Optimization: None
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 1.04 ms
  Bandwidth: 1042 Hz/Px
Sequence - Part 2
  EPI factor: 160
  RF pulse type: Normal
  Gradient mode: Fast

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\COR T2
TA: 4:12 PM: ISO Voxel size: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : tse_rr
Properties
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  Load images to graphic segments: On
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Routine
  Slice group: 1
  Slices: 50
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 2.5 mm
  TR: 4500.0 ms
  TE: 95.0 ms
  Averages: 3
  Concatenations: 2
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 4500.0 ms
  TE: 95.0 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 150 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
Contrast - Dynamic
  Averages: 3
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 2.5 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 32
  Reference scan mode: Self-calibration
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 50
  Dist. factor: 0 %
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
  FoV read: 160 mm
  FoV phase: 100.0 %
  Slice thickness: 2.5 mm
  TR: 4500.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 2
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Coronal
  Phase enc. dir.: R >> L
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  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 50
  Slice thickness: 2.5 mm
  Dist. factor: 0 %
  FoV read: 160 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
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  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: ---
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
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  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 4500.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 160 mm
  FoV phase: 100.0 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 2
Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: Read
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.5 ms
  Bandwidth: 260 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 9
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 17
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\cor FLAIR
TA: 6:36 PM: ISO Voxel size: 0.5×0.5×3.0 mmPAT: 2 Rel. SNR: 1.00  : tir
Properties
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  Load images to graphic segments: Off
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Routine
  Slice group: 1
  Slices: 40
  Dist. factor: 30 %
  Position: L5.5 A12.1 H60.5 mm
  Orientation: C > T-27.2 > S2.2
  Phase enc. dir.: R >> L
  AutoAlign: Head > Temporal lobe
  Phase oversampling: 40 %
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 9000.0 ms
  TE: 98 ms
  Averages: 3
  Concatenations: 2
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 9000.0 ms
  TE: 98 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Flip angle: 139 deg
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: Off
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Resolution - Common
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  Base resolution: 192
  Phase resolution: 119 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
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Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 40
  Dist. factor: 30 %
  Position: L5.5 A12.1 H60.5 mm
  Orientation: C > T-27.2 > S2.2
  Phase enc. dir.: R >> L
  FoV read: 180 mm
  FoV phase: 100.0 %
  Slice thickness: 3.0 mm
  TR: 9000.0 ms
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Temporal lobe
  Position: L5.5 A12.1 H60.5 mm
  Orientation: C > T-27.2 > S2.2
  Phase enc. dir.: R >> L
  Initial Position: R0.7 P5.0 H20.1
  R: 0.7 mm
  P: 5.0 mm
  H: 20.1 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Coronal
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Strong
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 61 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 40
  Slice thickness: 3.0 mm
  Dist. factor: 30 %
  FoV read: 180 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 61 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Temporal lobe
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: L5.5 A12.1 H60.5 mm
  Orientation: C > T-27.2 > S2.2
  Rotation: -2.23 deg
  R >> L: 180 mm
  F >> H: 180 mm
  A >> P: 156 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  TR: 9000.0 ms
  Concatenations: 2
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 2450 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 180 mm
  FoV phase: 100.0 %
  Phase resolution: 119 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 6.97 ms
  Bandwidth: 334 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 7
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 24
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\T1 TRUE IR SPC COR
TA: 6:56 PM: ISO Voxel size: 0.4×0.4×1.5 mmPAT: 2 Rel. SNR: 1.00  : spcir
Properties
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  Load images to stamp segments: Off
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Routine
  Slab group: 1
  Slabs: 1
  Position: L0.5 A2.8 H7.0 mm
  Orientation: C > T-12.0
  Phase enc. dir.: R >> L
  AutoAlign: Head > Temporal lobe
  Phase oversampling: 40 %
  Slice oversampling: 11.1 %
  Slices per slab: 144
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 1.50 mm
  TR: 4000 ms
  TE: 394 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 4000 ms
  TE: 394 ms
  MTC: Off
  Magn. preparation: Non-sel. IR
  TI 1: 450 ms
  Fat suppr.: None
  Blood suppr.: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Real
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 1.50 mm
  Base resolution: 192
  Phase resolution: 136 %
  Slice resolution: 93 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: L0.5 A2.8 H7.0 mm
  Orientation: C > T-12.0
  Phase enc. dir.: R >> L
  Slice oversampling: 11.1 %
  Slices per slab: 144
  FoV read: 150 mm
  FoV phase: 100.0 %
  Slice thickness: 1.50 mm
  TR: 4000 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Temporal lobe
  Position: L0.5 A2.8 H7.0 mm
  Orientation: C > T-12.0
  Phase enc. dir.: R >> L
  Initial Position: L0.5 A2.8 H7.0
  L: 0.5 mm
  A: 2.8 mm
  H: 7.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: C > T
  C > T: -12.0
  > S: 0.0
Geometry - Saturation
  Fat suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 7 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 7 mm
  MSMA: S - C - T
  Sagittal: R >> L
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
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System - Adjust Volume
  Position: L0.5 A2.8 H7.0 mm
  Orientation: C > T-12.0
  Rotation: 0.00 deg
  R >> L: 150 mm
  F >> H: 150 mm
  A >> P: 216 mm
  Reset: Off
System - Tx/Rx
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  Img. Scale Cor.: 4.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 4000 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. IR
  TI 1: 450 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 150 mm
  FoV phase: 100.0 %
  Phase resolution: 136 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.8 ms
  Adiabatic-mode: Off
  Bandwidth: 501 Hz/Px
Sequence - Part 2
  Echo train duration: 941 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T2 var
  Turbo factor: 230
Sequence - Assistant
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\AX SWI
TA: 4:03 PM: FIX Voxel size: 0.4×0.4×2.0 mmPAT: 3 Rel. SNR: 1.00  : swi_r
Properties
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  Load images to stamp segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  Slice oversampling: 9.1 %
  Slices per slab: 88
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 27.0 ms
  TE: 20.00 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 27.0 ms
  TE: 20.00 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 15 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  Base resolution: 256
  Phase resolution: 100 %
  Slice resolution: 100 %
  Phase partial Fourier: Off
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 9.1 %
  Slices per slab: 88
  FoV read: 220 mm
  FoV phase: 90.6 %
  Slice thickness: 2.00 mm
  TR: 27.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A6.6 F2.5
  L: 0.2 mm
  A: 6.6 mm
  F: 2.5 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slabs: 1
  Slices per slab: 88
  Slice thickness: 2.00 mm
  Dist. factor: 20 %
  FoV read: 220 mm
  FoV phase: 90.6 %
  Segments: 1
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
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  AutoAlign: Head > Brain
  Coil Select Mode: Default
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System - Adjust Volume
  Position: L0.2 A6.6 F2.5 mm
  Orientation: Transversal
  Rotation: 90.00 deg
  R >> L: 200 mm
  A >> P: 220 mm
  F >> H: 176 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - Signal1
  1st Signal/Mode: None
  TR: 27.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 90.6 %
  Phase resolution: 100 %
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Inline - Common
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  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 15 deg
  Measurements: 1
  Contrasts: 1
  TR: 27.0 ms
  TE: 20.00 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Phase stabilisation: Off
  Asymmetric echo: Off
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Interleaved
  Bandwidth: 120 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Slab-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 30 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\AX T1
TA: 3:42 PM: FIX Voxel size: 0.4×0.4×3.0 mmPAT: 3 Rel. SNR: 1.00  : tir
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 39
  Dist. factor: 30 %
  Position: L0.5 P13.3 H31.6 mm
  Orientation: T > S4.3 > C-2.0
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 46 %
  FoV read: 225 mm
  FoV phase: 84.4 %
  Slice thickness: 3.0 mm
  TR: 2000.0 ms
  TE: 9 ms
  Averages: 2
  Concatenations: 3
  Filter: Raw filter, Prescan Normalize, Image Filter
  Coil elements: HE1-4
Contrast - Common
  TR: 2000.0 ms
  TE: 9 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 900 ms
  Flip angle: 140 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 2
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 225 mm
  FoV phase: 84.4 %
  Slice thickness: 3.0 mm
  Base resolution: 320
  Phase resolution: 70 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slice group: 1
  Slices: 39
  Dist. factor: 30 %
  Position: L0.5 P13.3 H31.6 mm
  Orientation: T > S4.3 > C-2.0
  Phase enc. dir.: R >> L
  FoV read: 225 mm
  FoV phase: 84.4 %
  Slice thickness: 3.0 mm
  TR: 2000.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 3
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: Head > Brain
  Position: L0.5 P13.3 H31.6 mm
  Orientation: T > S4.3 > C-2.0
  Phase enc. dir.: R >> L
  Initial Position: L0.2 A7.2 F2.2
  L: 0.2 mm
  A: 7.2 mm
  F: 2.2 mm
  Initial Rotation: 90.00 deg
  Initial Orientation: Transversal
Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 2 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 39
  Slice thickness: 3.0 mm
  Dist. factor: 30 %
  FoV read: 225 mm
  FoV phase: 84.4 %
System - Miscellaneous
  Positioning mode: FIX
  Table position: F
  Table position: 2 mm
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System - Adjustments
  B0 Shim mode: Tune up
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System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 2000.0 ms
  Concatenations: 3
Physio - Cardiac
  Magn. preparation: Slice-sel. IR
  TI: 900 ms
  Fat suppr.: None
  Dark blood: Off
  FoV read: 225 mm
  FoV phase: 84.4 %
  Phase resolution: 70 %
  Trajectory: Cartesian
Physio - PACE
  Resp. control: Off
  Concatenations: 3
Inline - Common
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 9.02 ms
  Bandwidth: 240 Hz/Px
Sequence - Part 2
  Define: Turbo factor
  Echo trains per slice: 18
  Phase correction: Automatic
  Acoustic noise reduction: None
  RF pulse type: Normal
  Gradient mode: Fast
  Hyperecho: Off
  WARP: Off
  Red. EC sensitivity: Off
  Turbo factor: 6
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\SAG T1
TA: 1:54 PM: REF Voxel size: 0.9×0.9×3.5 mmPAT: 3 Rel. SNR: 1.00  : tir
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Routine
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  TR: 2000.0 ms
  TE: 8.6 ms
  Averages: 1
  Concatenations: 3
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 2000.0 ms
  TE: 8.6 ms
  TD: 0.0 ms
  MTC: Off
  Magn. preparation: Slice-sel. IR
  TI: 900 ms
  Flip angle: 140 deg
  Fat suppr.: None
  Water suppr.: None
  Restore magn.: Off
  Freeze suppressed tissue: On
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Off
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
  Base resolution: 256
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Trajectory: Cartesian
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 28
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 33
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 3.5 mm
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Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
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Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
Geometry - Tim CT
  Tim CT mode: Off
  Slices: 33
  Slice thickness: 3.5 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
System - Miscellaneous
  Positioning mode: REF
  Table position: F
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: R >> L
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  AutoAlign: ---
  Coil Select Mode: Default
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Physio - Cardiac
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  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
  Trajectory: Cartesian
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Sequence - Part 1
  Introduction: Off
  Dimension: 2D
  Compensate T2 decay: Off
  Reduce Motion Sens.: On
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Free echo spacing: Off
  Echo spacing: 8.58 ms
  Bandwidth: 260 Hz/Px
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
SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\BRN SEIZURE\B6 - SEIZURE WO\COR SPACE FLAIR
TA: 6:40 PM: ISO Voxel size: 0.5×0.5×2.5 mmPAT: 2 Rel. SNR: 1.00  : spcir
Properties
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  Load images to stamp segments: On
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Routine
  Slab group: 1
  Slabs: 1
  Position: R4.5 A15.3 H43.0 mm
  Orientation: C > T-12.7 > S7.6
  Phase enc. dir.: R >> L
  AutoAlign: Head > Temporal lobe
  Phase oversampling: 60 %
  Slice oversampling: 50.0 %
  Slices per slab: 64
  FoV read: 175 mm
  FoV phase: 100.0 %
  Slice thickness: 2.50 mm
  TR: 5000 ms
  TE: 388 ms
  Averages: 1.0
  Concatenations: 1
  Filter: Raw filter, Distortion Corr.(2D), Prescan Normalize, Image Filter
  Coil elements: HE1-4;NE1,2
Contrast - Common
  TR: 5000 ms
  TE: 388 ms
  MTC: Off
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Blood suppr.: Off
  Restore magn.: Off
Contrast - Dynamic
  Averages: 1.0
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 175 mm
  FoV phase: 100.0 %
  Slice thickness: 2.50 mm
  Base resolution: 192
  Phase resolution: 160 %
  Slice resolution: 75 %
  Phase partial Fourier: Allowed
  Slice partial Fourier: Off
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 40
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: On
  Intensity: Sharp
  Edge Enhancement: 3
  Smoothing: 3
  Unfiltered images: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: On
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Position: R4.5 A15.3 H43.0 mm
  Orientation: C > T-12.7 > S7.6
  Phase enc. dir.: R >> L
  Slice oversampling: 50.0 %
  Slices per slab: 64
  FoV read: 175 mm
  FoV phase: 100.0 %
  Slice thickness: 2.50 mm
  TR: 5000 ms
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Temporal lobe
  Position: R4.5 A15.3 H43.0 mm
  Orientation: C > T-12.7 > S7.6
  Phase enc. dir.: R >> L
  Initial Position: R4.5 A15.3 H43.0
  R: 4.5 mm
  A: 15.3 mm
  H: 43.0 mm
  Initial Rotation: 0.30 deg
  Initial Orientation: C > T
  C > T: -12.7
  > S: 7.6
Geometry - Saturation
  Fat suppr.: Fat sat.
  Fat sat. mode: Weak
  Restore magn.: Off
  Special sat.: None
Geometry - Navigator
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 43 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: H
  Table position: 43 mm
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Temporal lobe
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Standard
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System - Adjust Volume
  Position: R4.5 A15.3 H43.0 mm
  Orientation: C > T-12.7 > S7.6
  Rotation: 0.30 deg
  R >> L: 175 mm
  F >> H: 175 mm
  A >> P: 160 mm
  Reset: Off
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Physio - Signal1
  1st Signal/Mode: None
  Trigger delay: 0 ms
  TR: 5000 ms
  Concatenations: 1
Physio - Cardiac
  Magn. preparation: Non-sel. T2-IR
  TI 1: 1800 ms
  Fat suppr.: Fat sat.
  Dark blood: Off
  FoV read: 175 mm
  FoV phase: 100.0 %
  Phase resolution: 160 %
Physio - PACE
  Resp. control: Off
  Concatenations: 1
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Inline - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: Off
  Dimension: 3D
  Elliptical scanning: On
  Reordering: Linear
  Flow comp.: No
  Echo spacing: 4.34 ms
  Adiabatic-mode: Off
  Bandwidth: 651 Hz/Px
Sequence - Part 2
  Echo train duration: 803 ms
  RF pulse type: Normal
  Gradient mode: Fast
  Excitation: Non-sel.
  Flip angle mode: T2 var
  Turbo factor: 195
Sequence - Assistant
  Allowed delay: 30 s
