PrintOut
SIEMENS MAGNETOM Skyra
Table of contents
\\1_clinical skyra protocols
  BRAIN
    MRA HEAD
      V1 - MRA HEAD WO
        AAHScout
        SAG T1
        3D TOF
        2D TOF NECK

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\MRA HEAD\V1 - MRA HEAD WO\AAHScout
TA: 0:14 PM: REF Voxel size: 1.6×1.6×1.6 mmPAT: 3 Rel. SNR: 1.00  : fl
Properties
  Prio recon: Off
  Load images to viewer: On
  Inline movie: Off
  Auto store images: On
  Load images to stamp segments: On
  Load images to graphic segments: Off
  Auto open inline display: Off
  Auto close inline display: Off
  Start measurement without further preparation: On
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Phase oversampling: 0 %
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  TE: 1.37 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 3.15 ms
  TE: 1.37 ms
  Flip angle: 8 deg
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  Base resolution: 160
  Phase resolution: 100 %
  Slice resolution: 69 %
  Phase partial Fourier: 6/8
  Slice partial Fourier: 6/8
  Trajectory: Cartesian
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 24
  Accel. factor 3D: 1
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
Geometry - Common
  Slab group: 1
  Slabs: 1
  Dist. factor: 20 %
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Slice oversampling: 0.0 %
  Slices per slab: 128
  FoV read: 260 mm
  FoV phase: 100.0 %
  Slice thickness: 1.6 mm
  TR: 3.15 ms
  Multi-slice mode: Sequential
  Series: Ascending
  Concatenations: 1
Geometry - AutoAlign
  Slab group: 1
  Position: L0.0 P20.0 H0.0 mm
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  Initial Position: Isocenter
  L: 0.0 mm
  P: 0.0 mm
  H: 0.0 mm
  Initial Rotation: 0.00 deg
  Initial Orientation: Transversal
Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: H
  Table position: 0 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: REF
  Table position: H
  Table position: 0 mm
  MSMA: S - C - T
  Sagittal: L >> R
  Coronal: A >> P
  Transversal: F >> H
  Coil Combine Mode: Adaptive Combine
  Save uncombined: Off
  Matrix Optimization: Off
  Coil Select Mode: Default
System - Adjustments
  B0 Shim mode: Tune up
  B1 Shim mode: TrueForm
  Adjust with body coil: Off
  Confirm freq. adjustment: Off
  Assume Dominant Fat: Off
  Assume Silicone: Off
  Adjustment Tolerance: Auto
System - Adjust Volume
  Position: Isocenter
  Orientation: Transversal
  Rotation: 0.00 deg
  A >> P: 263 mm
  R >> L: 350 mm
  F >> H: 350 mm
  Reset: Off
System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: Low
  Img. Scale Cor.: 1.000
  Reset: Off
  ? Ref. amplitude 1H: 0.000 V
Physio - PACE
  Resp. control: Off
  Concatenations: 1
Inline - Common
  Flip angle: 8 deg
  Measurements: 1
  Time to center: 6.2 s
Inline - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Inline - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Inline - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 8 deg
  Measurements: 1
  Contrasts: 1
  TR: 3.15 ms
  TE: 1.37 ms
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Asymmetric echo: Weak
  Contrasts: 1
  Multi-slice mode: Sequential
  Bandwidth: 540 Hz/Px
Sequence - Part 2
  RF pulse type: Fast
  Gradient mode: Normal
  Excitation: Non-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\MRA HEAD\V1 - MRA HEAD WO\SAG T1
TA: 1:20 PM: REF Voxel size: 0.7×0.7×4.0 mmPAT: 2 Rel. SNR: 1.00  : fl
Properties
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  Start measurement without further preparation: Off
  Wait for user to start: Off
  Start measurements: Single measurement
Routine
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 440.0 ms
  TE: 2.46 ms
  Averages: 1
  Concatenations: 1
  Filter: Prescan Normalize, Elliptical filter
  Coil elements: HE1-4
Contrast - Common
  TR: 440.0 ms
  TE: 2.46 ms
  MTC: Off
  Magn. preparation: None
  Flip angle: 90 deg
  Fat suppr.: None
  Water suppr.: None
  SWI: Off
Contrast - Dynamic
  Averages: 1
  Averaging mode: Long term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  Base resolution: 320
  Phase resolution: 80 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
Geometry - Common
  Slice group: 1
  Slices: 25
  Dist. factor: 30 %
  Position: Isocenter
  Orientation: Sagittal
  Phase enc. dir.: A >> P
  FoV read: 220 mm
  FoV phase: 100.0 %
  Slice thickness: 4.0 mm
  TR: 440.0 ms
  Multi-slice mode: Interleaved
  Series: Interleaved
  Concatenations: 1
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: Isocenter
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Geometry - Saturation
  Saturation mode: Standard
  Fat suppr.: None
  Water suppr.: None
  Special sat.: None
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Geometry - Tim CT
  Tim CT mode: Off
  Slices: 25
  Slice thickness: 4.0 mm
  Dist. factor: 30 %
  FoV read: 220 mm
  FoV phase: 100.0 %
  Segments: 1
System - Miscellaneous
  Positioning mode: REF
  Table position: F
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  AutoAlign: ---
  Coil Select Mode: Default
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System - Tx/Rx
  Frequency 1H: 123.259468 MHz
  Correction factor: 1
  Gain: High
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Physio - Signal1
  1st Signal/Mode: None
  TR: 440.0 ms
  Concatenations: 1
  Segments: 1
Physio - Cardiac
  Tagging: None
  Magn. preparation: None
  Fat suppr.: None
  Dark blood: Off
  FoV read: 220 mm
  FoV phase: 100.0 %
  Phase resolution: 80 %
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Inline - Common
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Liver registration: Off
  Save original images: On
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Inline - Soft Tissue
  Wash - In: Off
  Wash - Out: Off
  TTP: Off
  PEI: Off
  MIP - time: Off
  Measurements: 1
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Inline - MapIt
  Save original images: On
  MapIt: None
  Flip angle: 90 deg
  Measurements: 1
  Contrasts: 1
  TR: 440.0 ms
  TE: 2.46 ms
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Phase stabilisation: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: No
  Multi-slice mode: Interleaved
  Bandwidth: 380 Hz/Px
Sequence - Part 2
  Segments: 1
  Acoustic noise reduction: None
  RF pulse type: Fast
  Gradient mode: Fast
  Excitation: Slice-sel.
  RF spoiling: On
Sequence - Assistant
  Mode: Off
  Allowed delay: 60 s

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\MRA HEAD\V1 - MRA HEAD WO\3D TOF
TA: 6:09 PM: REF Voxel size: 0.3×0.3×0.5 mmPAT: 3 Rel. SNR: 1.00  : fl_r
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Routine
  Slab group: 1
  Slabs: 6
  Dist. factor: -20.00 %
  Position: L0.0 A4.0 F6.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  AutoAlign: Head > Brain
  Phase oversampling: 0 %
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 200 mm
  FoV phase: 90.6 %
  Slice thickness: 0.50 mm
  TR: 21.0 ms
  TE: 3.43 ms
  Averages: 1
  Concatenations: 6
  Filter: Prescan Normalize
  Coil elements: HE1-4
Contrast - Common
  TR: 21.0 ms
  TE: 3.43 ms
  TD: 0.000 ms
  MTC: Off
  Flip angle: 18 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
Resolution - Common
  FoV read: 200 mm
  FoV phase: 90.6 %
  Slice thickness: 0.50 mm
  Base resolution: 384
  Phase resolution: 95 %
  Slice resolution: 50 %
  Phase partial Fourier: Off
  Slice partial Fourier: 7/8
  Interpolation: On
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 3
  Ref. lines PE: 32
  Accel. factor 3D: 1
  Reference scan mode: Integrated
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Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: Off
  POCS: Off
Geometry - Common
  Slab group: 1
  Slabs: 6
  Dist. factor: -20.00 %
  Position: L0.0 A4.0 F6.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
  Slice oversampling: 20.0 %
  Slices per slab: 40
  FoV read: 200 mm
  FoV phase: 90.6 %
  Slice thickness: 0.50 mm
  TR: 21.0 ms
  Multi-slice mode: Sequential
  Series: Descending
  Concatenations: 6
Geometry - AutoAlign
  Slab group: 1
  AutoAlign: Head > Brain
  Position: L0.0 A4.0 F6.8 mm
  Orientation: Transversal
  Phase enc. dir.: R >> L
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Geometry - Saturation
  Fat suppr.: None
  Water suppr.: None
  Special sat.: Tracking H
  Gap: 10 mm
  Thickness: 40 mm
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System - Miscellaneous
  Positioning mode: REF
  Table position: H
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  Coil Combine Mode: Sum of Squares
  Save uncombined: Off
  Matrix Optimization: Off
  AutoAlign: Head > Brain
  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 21.0 ms
  Concatenations: 6
Physio - Cardiac
  Fat suppr.: None
  Dark blood: Off
  FoV read: 200 mm
  FoV phase: 90.6 %
  Phase resolution: 95 %
Angio - Common
  TONE ramp: 70 %
  Flow direction: F >> H
  Flip angle: 18 deg
  MTC: Off
  Measurements: 1
  3D centric reordering: On
Angio - Inline
  Subtract: Off
  Measurements: 1
  StdDev: Off
  Save original images: On
Angio - MIP
  MIP-Sag: Off
  MIP-Cor: Off
  MIP-Tra: Off
  MIP-Time: Off
  Save original images: On
Angio - Composing
  Inline Composing: Off
  Distortion Corr.: Off
Sequence - Part 1
  Introduction: On
  Dimension: 3D
  Elliptical scanning: Off
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Sequential
  Bandwidth: 186 Hz/Px
Sequence - Part 2
  Gradient mode: Fast
  RF spoiling: On
Sequence - Assistant
  Mode: Off

SIEMENS MAGNETOM Skyra
\\1_clinical skyra protocols\BRAIN\MRA HEAD\V1 - MRA HEAD WO\2D TOF NECK
TA: 6:13 PM: ISO Voxel size: 0.8×0.8×2.5 mmPAT: 2 Rel. SNR: 1.00  : fl_r
Properties
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  Load images to stamp segments: Off
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Routine
  Slice group: 1
  Slices: 128
  Dist. factor: -33.00 %
  Position: L1.4 A14.8 F121.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  AutoAlign: ---
  Phase oversampling: 0 %
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 2.5 mm
  TR: 20.0 ms
  TE: 4.56 ms
  Averages: 1
  Concatenations: 128
  Filter: Distortion Corr.(2D), Prescan Normalize, Elliptical filter
  Coil elements: HE3,4;NE1,2;SP1
Contrast - Common
  TR: 20.0 ms
  TE: 4.56 ms
  TD: 0.000 ms
  MTC: Off
  Flip angle: 45 deg
  Fat suppr.: None
  Water suppr.: None
Contrast - Dynamic
  Averages: 1
  Averaging mode: Short term
  Reconstruction: Magnitude
  Measurements: 1
  Multiple series: Each measurement
Resolution - Common
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 2.5 mm
  Base resolution: 256
  Phase resolution: 100 %
  Phase partial Fourier: Off
  Interpolation: Off
Resolution - iPAT
  PAT mode: GRAPPA
  Accel. factor PE: 2
  Ref. lines PE: 24
  Reference scan mode: Integrated
Resolution - Filter Image
  Image Filter: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
  Prescan Normalize: On
  Unfiltered images: Off
  Normalize: Off
  B1 filter: Off
Resolution - Filter Rawdata
  Raw filter: Off
  Elliptical filter: On
  POCS: Off
Geometry - Common
  Slice group: 1
  Slices: 128
  Dist. factor: -33.00 %
  Position: L1.4 A14.8 F121.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  FoV read: 200 mm
  FoV phase: 100.0 %
  Slice thickness: 2.5 mm
  TR: 20.0 ms
  Multi-slice mode: Sequential
  Series: Descending
  Concatenations: 128
Geometry - AutoAlign
  Slice group: 1
  AutoAlign: ---
  Position: L1.4 A14.8 F121.5 mm
  Orientation: Transversal
  Phase enc. dir.: A >> P
  Initial Position: L1.4 A14.8 F121.5
  L: 1.4 mm
  A: 14.8 mm
  F: 121.5 mm
  Initial Rotation: 0.60 deg
  Initial Orientation: Transversal
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Geometry - Tim Planning Suite
  Set-n-Go Protocol: Off
  Table position: F
  Table position: 122 mm
  Inline Composing: Off
System - Miscellaneous
  Positioning mode: ISO
  Table position: F
  Table position: 122 mm
  MSMA: S - C - T
  Sagittal: R >> L
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  Coil Focus: Flat
  AutoAlign: ---
  Coil Select Mode: Default
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Physio - Signal1
  1st Signal/Mode: None
  TR: 20.0 ms
  Concatenations: 128
Physio - Cardiac
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  FoV phase: 100.0 %
  Phase resolution: 100 %
Angio - Common
  Flow direction: F >> H
  Flip angle: 45 deg
  MTC: Off
  Measurements: 1
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Angio - MIP
  MIP-Sag: Off
  MIP-Cor: On
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Angio - Composing
  Inline Composing: Off
  Distortion Corr.: On
  Mode: 2D
  Unfiltered images: Off
Sequence - Part 1
  Introduction: On
  Dimension: 2D
  Asymmetric echo: Allowed
  Contrasts: 1
  Flow comp.: Yes
  Multi-slice mode: Sequential
  Bandwidth: 219 Hz/Px
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